PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1300, 700]
  expName = Lab6
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $" GBP " + str (reward_today) + " today" + " or" + " GBP" + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't', 'l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book6.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', 11), ('future_reward', 30), ('delay', 7)]),
      OrderedDict([('reward_today', 15), ('future_reward', 35), ('delay', 13)]),
      OrderedDict([('reward_today', 27), ('future_reward', 50), ('delay', 15)]),
      OrderedDict([('reward_today', 40), ('future_reward', 55), ('delay', 18)]),
      OrderedDict([('reward_today', 49), ('future_reward', 60), ('delay', 19)]),
      OrderedDict([('reward_today', 67), ('future_reward', 75), ('delay', 19)]),
      OrderedDict([('reward_today', 78), ('future_reward', 80), ('delay', 20)]),
      OrderedDict([('reward_today', 82), ('future_reward', 85), ('delay', 21)]),
      OrderedDict([('reward_today', 83), ('future_reward', 90), ('delay', 26)]),
      OrderedDict([('reward_today', 84), ('future_reward', 95), ('delay', 27)]),
      OrderedDict([('reward_today', 85), ('future_reward', 100), ('delay', 28)]),
      OrderedDict([('reward_today', 86), ('future_reward', 105), ('delay', 30)]),
      OrderedDict([('reward_today', 87), ('future_reward', 110), ('delay', 31)]),
      OrderedDict([('reward_today', 87), ('future_reward', 111), ('delay', 35)]),
      OrderedDict([('reward_today', 88), ('future_reward', 115), ('delay', 36)]),
      OrderedDict([('reward_today', 89), ('future_reward', 120), ('delay', 41)]),
      OrderedDict([('reward_today', 89), ('future_reward', 125), ('delay', 41)]),
      OrderedDict([('reward_today', 91), ('future_reward', 130), ('delay', 42)]),
      OrderedDict([('reward_today', 91), ('future_reward', 135), ('delay', 43)]),
      OrderedDict([('reward_today', 92), ('future_reward', 140), ('delay', 44)])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
    Routine trial
  LoopTerminator trials
